PsychoPy2experiment version="3.2.4"
Settings
  Experiment info = {'participant': '', 'run': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = pix
  Window size (pixels) = [1536, 864]
  color = $[0.498,0.498,0.498]
  expName = visualcheckerboard
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Routines
  Routine trial
    ImageComponent image
      image = images/Checkerboard.jpg
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .25
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  Routine trial2
    ImageComponent image_2
      image = images/CheckerboardInverse.jpg
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .25
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  Routine wait_for_scanner
    TextComponent text
      color = black
      letterHeight = 50
      pos = (-250, 0)
      startVal [time (s)] = 0.0
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      text:
        When you see a checkerboard,
        look at the red dot,
        and try not to let
        your eyes wander.
    ImageComponent image_3
      image = images/Checkerboard.jpg
      pos = (250, 0)
      size = (550,450)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys = '5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine fix
    PolygonComponent fixation
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[-1.000,-1.000,-1.000]
      pos = (-15, 0)
      shape = cross
      size = (30,30)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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Flow
  Routine wait_for_scanner
  Routine fix
  LoopInitiator trials_2 loopType="TrialHandler"
    loopType = random
    nReps = 4
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    LoopInitiator trials loopType="TrialHandler"
      loopType = sequential
      nReps = 72
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      Routine trial
      Routine trial2
    LoopTerminator trials
    Routine fix
  LoopTerminator trials_2
